# 1 "/home/nmr/prog/pp/HMQC2md"
; HMQC2.dm	D. Massiot 24/08/95

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;Avancesolids.incl
;   for TCU3
;
;version 1 28.2.2001, written by HF
;	   4.4.2006, complemented by Ste

;$CLASS=Solids INCL
;$COMMENT=definitions for setrtp and setnmr
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;switch between 1H or 19F output (H amplifier) 


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;gating pulse for RX, ADC and HPPR auto mode


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;explicit blanking of preamp, receiver, adc, not implemented yet


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;generate dwell clock


;turn dwell clock on/off
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;


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;define data sampling for WAHUHA type experiments, samples analogue or digitally for d9, closes receiver


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;explicit transmitter blanking, not supported yet

;NCO switching, to be implemented

;$id: $
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;cnst11 : to adjust t=0 for acquisition, if digmod = baseopt
"acqt0=1u*cnst11"


"p2=2*p1"
"d6=l6*(1s/cnst31)-(p1/2)-(p2/2)"
"d0=0.5s/cnst31"
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"in0=inf1/2"

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define delay MCWRK
define delay MCREST
define loopcounter ST1CNT
"ST1CNT = td1 / 2"
"MCREST = 20m - 10m"
"MCWRK = 0.333333*10m"

    dccorr
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1 	ze
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2 MCWRK 
LBLSTS1, MCWRK 
LBLF1, MCWRK
  MCREST
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		d1

  	(p1 ph1):f1
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		d6
			(p11 ph11):f3

		  d0 

		(p2 ph2):f1
			d0
			(p11 ph12):f3
	
  	go=2 ph31 
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  MCWRK  wr #0 if #0 zd ip11
  lo to LBLSTS1 times 2
  MCWRK id0
  lo to LBLF1 times ST1CNT
  MCWRK
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exit

ph1  = 0 0
ph2  = 0 0 1 1 2 2 3 3
ph11 = 0 0 
ph12 = 0 2

ph31 = 0 2 2 0
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;pl1 : f1 channel - power level for pulse (default)
;p1 : f1 channel -  high power pulse
;d1 : relaxation delay; 1-5 * T1
;d0 : 2u min
