# 1 "C:/Bruker/ts21b10rel/exp/stan/nmr/lists/pp/hsqcedetgpsp.3"
;hsqcedetgpsp.3
;avance-version (07/07/02)
;HSQC
;2D H-1/X correlation via double inept transfer
;phase sensitive using Echo/Antiecho-TPPI gradient selection
;with decoupling during acquisition
;using trim pulses in inept transfer
;with multiplicity editing during selection step
;using shaped pulses for inversion on f2 - channel
;for matched sweep adiabatic pulses
;
;W. Willker, D. Leibfritz, R. Kerssebaum & W. Bermel, Magn. Reson.
;   Chem. 31, 287-292 (1993)
;C. Zwahlen, P. Legault, S.J.F. Vincent, J. Greenblatt, R. Konrat &
;   L.E. Kay, J. Am. Chem. Soc. 119 6711-6721 (1997)
;(R.D. Boyer, R. Johnson & K. Krishnamurthy, 
;   J. Magn. Reson. 165, 253-259 (2003) )
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


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

"p2=p1*2"
"d4=1s/(cnst2*4)"
"d11=30m"


"d0=3u"

"in0=inf1/2"


"DELTA=d21-p16-d16-p2-d0*2-p3*2/3.1416"
"DELTA1=d4-p16-d16-larger(p2,p14)/2-8u"
"DELTA2=d4-larger(p2,p14)/2"
"DELTA3=d21-p2+p3*2/3.1416"


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define delay MCWRK
define delay MCREST
define loopcounter ST1CNT
"ST1CNT = td1 / (2)"
"MCWRK = 0.166667*d1"
"MCREST = d1 - d1"
    dccorr
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1 ze
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  d11 pl12:f2
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2 MCWRK  do:f2
LBLSTS1, MCWRK  * 4
LBLF1, MCWRK 
  MCREST
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3 (p1 ph1)
  DELTA2 pl0:f2
  4u
  (center (p2 ph1) (p14:sp3 ph6):f2 )
  4u
  DELTA2 pl2:f2 setnmr3|0 setnmr0|34|32|33 ctrlgrad 0
  p28 ph1
  4u
  (p1 ph2) 

  (p3 ph3):f2
  d0 
  (p2 ph5)
  d0
  p16:gp1*EA
  d16
  DELTA
  (p31:sp18 ph1):f2
  (p2 ph1)
  DELTA3
  4u
  (p31:sp18 ph1):f2
  2u
  2u pl2:f2
  (p3 ph4):f2

  (p1 ph1) 
  DELTA2 pl0:f2
  (center (p2 ph1) (p14:sp3 ph1):f2 )
  4u
  p16:gp2
  d16
  DELTA1 pl12:f2
  4u setnmr3^0 setnmr0^34^32^33 ctrlgrad 7
  go=2 ph31 cpd2:f2
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  MCWRK  do:f2 wr #0 if #0 zd igrad EA
  lo to LBLSTS1 times 2
  MCWRK id0  MCWRK  ip3*2  MCWRK  ip6*2  MCWRK  ip31*2
  lo to LBLF1 times ST1CNT
  MCWRK
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exit
   

ph1=0 
ph2=1
ph3=0 2
ph4=0 0 0 0 2 2 2 2
ph5=0 0 2 2
ph6=0
ph31=2 0 2 0 0 2 0 2
  
;pl0 : 120dB
;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;sp3: f2 channel - shaped pulse (180degree inversion)
;spnam3: Crp60,0.5,20.1
;sp18: f2 channel - shaped pulse 180 degree (adiabatic matched sweep)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p14: f2 channel - 180 degree shaped pulse for inversion
;     = 500usec for Crp60,0.5,20.1
;p16: homospoil/gradient pulse
;p28: f1 channel - trim pulse
;p31: f2 channel - 180 degree shaped pulse for adiabatic matched sweep
;d0 : incremented delay (2D)                  [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J)XH
;d11: delay for disk I/O                             [30 msec]
;d16: delay for homospoil/gradient recovery
;d21: set d21 according to multiplicity selection
;        1/(2J(XH))  XH, XH3 positive, XH2 negative
;cnst2: = J(XH)
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;NS: 1 * n
;DS: >= 16
;td1: number of experiments
;FnMODE: echo-antiecho
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence


;use gradient ratio:	gp 1 : gp 2
;			  80 : 20.1     for C-13
;			  80 :  8.1     for N-15

;for z-only gradients:
;gpz1: 80%
;gpz2: 20.1% for C-13, 8.1% for N-15

;use gradient files:   
;gpnam1: SINE.100
;gpnam2: SINE.100


                                          ;preprocessor-flags-start
;LABEL_CN: for C-13 and N-15 labeled samples start experiment with 
;             option -DLABEL_CN (eda: ZGOPTNS)
                                          ;preprocessor-flags-end


;$Id: hsqcedetgpsp.3,v 1.4.2.1 2007/07/04 13:41:19 ber Exp $
